PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'dont_use': u''}
  Units = pix
  Enable Escape = False
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save wide csv file = False
  Data filename = "BalloonGame_%s" % expInfo['date']
  Show info dlg = False
  expName = balloon_game
  Screen = 1
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Routines
  Routine boring_instr
    CodeComponent break_logic2
      Begin Routine:
        currentInstructionNumber = 1
        if skip_instructions: continueRoutine = False
      Each Frame:
        # all slides advance with a space
        if event.getKeys('space'):
            currentInstructionNumber += 1

        if currentInstructionNumber == 11:
            break

        currentInstructionString = str(currentInstructionNumber)
        if currentInstructionNumber < 10:
            currentInstructionString = "0" + currentInstructionString
        currentInstructionFile = boringInstructionSlides + "Slide" + currentInstructionString + ".jpg"
    ImageComponent instruction
      units = pix
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (screen_width, screen_height)
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  Routine game_instr_2
    CodeComponent instuction_logic_2
      Begin Routine:
        if skip_instructions: continueRoutine = False
        currentInstructionNumber = 16
      Each Frame:
        if event.getKeys(['space']):
            currentInstructionNumber += 1

        if currentInstructionNumber == 19:
            continueRoutine = False
        else:
            currentInstructionString = str(currentInstructionNumber)
            if currentInstructionNumber < 10:
                currentInstructionString = "0" + currentInstructionString
            currentInstructionFile = instructionSlides + "Slide" + currentInstructionString + ".jpg"
    KeyboardComponent get_key_press_2
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0
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    ImageComponent slides_2
      units = pix
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (screen_width, screen_height)
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  Routine game_instr
    CodeComponent instuction_logic
      Begin Routine:
        if skip_instructions: continueRoutine = False
        currentInstructionNumber = 1
      Each Frame:
        # first slide stays for 2 seconds (although user can still skip forward with space bar if they try)
        if (t > 2 and currentInstructionNumber == 1):
            currentInstructionNumber += 1

        # most slides advance with the press of the space bar
        if event.getKeys(['space']) and currentInstructionNumber in range(1, 11) + [15]:
            currentInstructionNumber += 1
        if event.getKeys([left_key]) and currentInstructionNumber == 11:
            currentInstructionNumber += 1
        if event.getKeys([right_key]) and currentInstructionNumber == 12:
            currentInstructionNumber += 1
        if event.getKeys([down_key]) and currentInstructionNumber == 13:
            currentInstructionNumber += 1
        if event.getKeys([up_key]) and currentInstructionNumber == 14:
            currentInstructionNumber += 1

        if currentInstructionNumber == 15:
            continueRoutine = False

        currentInstructionString = str(currentInstructionNumber)
        if currentInstructionNumber < 10:
            currentInstructionString = "0" + currentInstructionString
        currentInstructionFile = instructionSlides + "Slide" + currentInstructionString + ".jpg"
    KeyboardComponent get_key_press
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0
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    ImageComponent slides
      units = pix
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (screen_width, screen_height)
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  Routine thanks
    ImageComponent Thankyo
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image = $instructionSlides + "Thank_you.jpg"
      size = (screen_width, screen_height)
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    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine initialize
    CodeComponent init
      Begin Experiment:
        from optparse import OptionParser, SUPPRESS_HELP
        from datetime import datetime
        from subprocess import Popen, call
        from random import shuffle

        # check frame rate
        expected_fps = 60
        psychopy_calculated_fps = round(expInfo['frameRate'])
        if psychopy_calculated_fps != expected_fps:
            print "Warning: The graphics of this task are meant to run at %d frames per second, but your display runs at %d." % (expected_fps, psychopy_calculated_fps)

        win.recordFrameIntervals = True
        win.refreshThreshold = 1.0/expected_fps + 0.004
        logging.console.setLevel(logging.WARNING) # so dropped frames get reported

        # collect runtime options (can be supplied via command line, or the wrapper script can do it automatically)
        parser = OptionParser()
        parser.add_option("-s", "--source", metavar="SOURCE_DIR", dest="source_dir", help="the local sc task directory")
        parser.add_option("-i", "--id", metavar="ID", dest="id", help="the participant ID")
        parser.add_option("-o", "--output", metavar="OUTPUT_DIR", dest="output_dir", help="the directory where output/logs should be saved")
        parser.add_option("-y", "--yoke_source", metavar="YOKE_SOURCE", dest="yoke_source", help="a yoking file to which the current participant should be yoked")
        parser.add_option("-b", "--boring_mode", action="store_true", dest="is_boring", help="invokes non-stress version of game")
        parser.add_option("-B", "--button_box", action="store_true", default=False, dest="button_box_mode", help="use button box input (1-4 instead of right, down, left, up)")
        parser.add_option("-v", "--version", metavar="VERSION", dest="version", help=SUPPRESS_HELP, default="unknown")
        parser.add_option("--short-iti", action="store_true", default=False, dest="short_iti", help="use shortened inter-trial intervals (for test runs only)")
        parser.add_option("--skip-instructions", action="store_true", default=False, dest="skip_instructions", help="skip instructions/practice slides (for test runs only)")
        parser.add_option("--debug-trial", metavar="TRIAL_NUMBER", dest="debug_trial", help="test a specific trial and skip everything else")
        (options, args) = parser.parse_args()
        projectDir = options.source_dir
        outputDir = options.output_dir
        id = options.id
        yokeSourceFile = options.yoke_source
        boringMode = options.is_boring
        version = options.version
        button_box_mode = options.button_box_mode

        # these modes can be used during test runs for easier debugging
        short_iti_mode = options.short_iti
        skip_instructions = options.skip_instructions
        trial_debug_requested = options.debug_trial
        if trial_debug_requested:
            trial_debug_mode = True
            debug_trial = int(trial_debug_requested) # when not None, the option itself indicates trial to test
            skip_instructions = True
            short_iti_mode = True
        else:
            trial_debug_mode = False

        if button_box_mode:
            down_key = "1" # green
            left_key = "2" # red
            up_key = "3" # blue
            right_key = "4" # yellow
        else:
            right_key = "right"
            down_key = "down"
            left_key = "left"
            up_key = "up"

        if not projectDir or not outputDir or not id:
            parser.print_help()
            Popen("sleep 5; rm %s.log %s.psydat" %(filename, filename), shell=True)
            sys.exit()

        logDir = outputDir + "/logs"
        if not os.path.exists(logDir): os.mkdir(logDir)

        new_filename = "%s/BalloonGame_%s_%s" % (logDir, id, expInfo['date'])
        call("mv %s* %s.log" % (filename, new_filename), shell=True)
        filename = new_filename

        # set variable to "controllable_stress", "uncontrollable_stress", or "nonstressed"
        condition = "unknown"
        if boringMode:
            condition = "nonstressed"
        elif yokeSourceFile:
            condition = "uncontrollable_stress"
        else:
            condition = "controllable_stress"


        # folder that holds images and sounds used in the experiment
        media = projectDir + "/sc_media/"
        instructionSlides = media + "Balloon_instruction_slides/"
        boringInstructionSlides = media + "Balloon_nonstressed_instruction_slides/"

        # setting up where to store output data
        outputFile = "%s/BalloonGame_%s_%s_data.txt" % (outputDir, id, expInfo['date'])
        f = open(outputFile, 'w')

        # setting up for unyoked participants (uncontrollable stress)
        yokingOutputDir = outputDir + "/yoking_files"
        isYokedParticipant = False
        if yokeSourceFile:
            isYokedParticipant = True
            try:
                y = open(yokeSourceFile, 'r')
            except:
                print "Error: Could not open yoke source file %s" % yokeSourceFile
                core.quit()
        else:
            yokingOutputFile = "%s/BalloonGame_%s_%s_yoke.txt" % (yokingOutputDir, id, expInfo['date'])
            try:
                y = open(yokingOutputFile, 'w')
            except:
                print "Error: Could not create yoking file %s" % yokingOutputFile
                core.quit()

        # turn on the non-stressed mode, if applicable
        if (boringMode and not isYokedParticipant):
            print "Error: Non-stressed (boring) condition was selected without a yoking source file being specified."
            core.quit()

        # length of anticipatory period (before each trial starts)
        anticipatoryPeriod = 4

        # length of time between trials (for MRI synching)
        itiLength = 10
        if short_iti_mode: itiLength = 1

        # distance wand moves per step (in pixels)
        wand_step_size = 80

        # screen size (these values just reflect what is already set by Psychopy)
        screen_width = 1440
        screen_height = 900

        # read in balloon-wand collision file
        collision_space_by_y = {}
        collision_file = projectDir + "/balloon_wand_collision_map.txt"
        with open(collision_file) as fp:
            for line in fp:
                line = line.strip()
                if line == "": continue
                fields = line.split("\t")
                collision_space_by_y[int(fields[0])] = (int(fields[1]), int(fields[2]))
      End Experiment:
        print "Finished the game!"
  Routine wand_practice
    CodeComponent code_3
      Begin Routine:
        if skip_instructions: continueRoutine = False
        wand_position = (0, 0)
        practice_length = 20.0
        rounded_seconds_remaining = practice_length
        time_left.setText(str(int(rounded_seconds_remaining)))
      Each Frame:
        # moving wand when arrow keys are clicked
        new_wand_position = wand_position
        if event.getKeys([right_key]):
            if wand_position[0] + wand.size[0]/2 + wand_step_size < screen_width/2:
                new_wand_position = (wand_position[0] + wand_step_size, wand_position[1])
        if event.getKeys([left_key]):
            if wand_position[0] - wand.size[0]/2 - wand_step_size > -1 * screen_width/2:
                new_wand_position = (wand_position[0] - wand_step_size, wand_position[1])
        if event.getKeys([up_key]):
            if wand_position[1] + wand.size[1]/2 + wand_step_size < screen_height/2:
                new_wand_position = (wand_position[0], wand_position[1] + wand_step_size)
        if event.getKeys([down_key]):
            if wand_position[1] - wand.size[1]/2 - wand_step_size > -1 * screen_height/2:
                new_wand_position = (wand_position[0], wand_position[1] - wand_step_size)

        if wand_position != new_wand_position:
            wand_position = new_wand_position

        seconds_remaining = practice_length - t
        if seconds_remaining < rounded_seconds_remaining - 1:
            rounded_seconds_remaining -= 1
            time_left.setText(str(int(rounded_seconds_remaining)))

        if event.getKeys("escape"):
            continueRoutine=False
    ImageComponent magic_wand
      stopVal [duration (s)] = 20
      pos [set every frame] = wand_position
      units = pix
      startVal [time (s)] = 0
      image = $media + "magic_wand.png"
      size = (80, 70)
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    TextComponent time_left
      color = #053270
      stopVal [duration (s)] = 20
      pos = (.9, -.8)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine balloons
    CodeComponent code
      Begin Experiment:
        # signals when the user has successfully halted the balloon
        success = 0

        # time when trial ends (regardless of catching balloon)
        endTrialTime = anticipatoryPeriod + 4.5

        # will be used to keep track of time after halting balloon
        successClock = core.Clock()

        # Balloon's y-axis start position and y-axis speed are always the same
        yStartPos = -screen_height/2
        ySpeed = 6

        top_of_catchable_area = .85 * screen_height/2

        # Define per-trial balloon starting x-position, x-speed (pixels/frame), and zigzag pattern
        balloon_trajectory_info = [
            (-675, 6, [70, -145]),
            (-600, 0, []),
            (-575, 5, [-200, -500, 290]),
            (-575, -2, [-600, -400]),
            (-400, 8, [0, -360, 650, -500, 500]),
            (-400, 6, []),
            (-400, -7, [-575, 300]),
            (-360, 9, [0, -300, -150]),
            (-360, 6, [-75, -150, 150, -290]),
            (-360, 3, [-75]),
            (-350, -1, []),
            (-300, 7, [576, 432]),
            (-275, 7, [0, -575, -300]),
            (-250, 8, [-72, -144, -72]),
            (-225, 7, [-144, -504, 216]),
            (-150, 0, []),
            (125, -7, [0, 500, -140, 210, -430]),
            (200, -7, [0]),
            (225, -9, [0, 580, -215, 215, -500, 575]),
            (300, -5, [100, 200, -100]),
            (300, -9, [-575, 575, -575, 575]),
            (300, 2, []),
            (360, -5, [0, 430]),
            (360, -5, [75]),
            (360, 6, [510]),
            (450, -9, [390, 505, 450, 600, 500, 600, 550, 625]),
            (400, -6, [-580, -290, -325]),
            (400, -6, [140]),
            (650, -8, [150]),
            (650, 0, [])]


        # will pull from balloon settings list in random order (unless testing trials)
        balloon_trajectory_order = range(0, len(balloon_trajectory_info))
        if not trial_debug_mode: shuffle(balloon_trajectory_order)


        # log info
        currentTrial = 0
        totalPopped = 0
        totalSaved = 0

        # write data file headers
        f.write("# Version: %s\n" % version)
        f.write("# Condition: %s\n" % condition)
        if condition != "controllable_stress":
            f.write("# Yoked to: %s\n" % yokeSourceFile)
        f.write("ID\tTime\tTrial\tRel_time\tX_balloon\tY_balloon\tX_wand\tY_wand\tkey_just_pressed\tvalid_key_press\t" +
        "total_key_presses\ttotal_valid_key_presses\tjust_popped_balloon\tjust_saved_balloon\ttotal_popped\ttotal_saved\n")

        # write yoking file headers
        if (not isYokedParticipant):
            y.write("ID\tTrial\tBalloon_saved\tSuccess_time\n")
        else:
            y.readline() # skip header line
            previousParticipantOutcomes = y.readlines()
            if len(previousParticipantOutcomes) != 30:
                print "Error: Yoking file " + yokeSourceFile + " doesn't appear to have one line per trial."
                core.quit()

        # volume of aversive pop (gets changed to 0 in nonstressed condition)
        popVolume = 1
      Begin Routine:
        # indicator variable to track if it's time to pop the balloon
        timeToPop = 0
        success = 0
        startedTrial = 0
        timeSinceSuccess = 0

        wand_position = (0, -.8 * screen_height/2)
        wand_width = wand.size[0]
        wand_height = wand.size[1]
        balloonImage = media + "pink_balloon.png"
        current_trajectory_index = balloon_trajectory_order.pop(0)
        currentBalloonSettings = balloon_trajectory_info[current_trajectory_index]
        print "Using index %d in balloon trajectory list: " % current_trajectory_index + str(currentBalloonSettings)
        balloonPosition = (currentBalloonSettings[0], yStartPos)
        balloonShift = (currentBalloonSettings[1], ySpeed)
        zigs = currentBalloonSettings[2]

        if boringMode:
            popVolume = 0

        if isYokedParticipant:
            trialInfo = previousParticipantOutcomes.pop(0).rstrip().split("\t")
            print "Using this line from yoke source file: " + "\t".join(trialInfo)
            balloonToBeSaved = False
            if trialInfo[-2] == "1":
                balloonToBeSaved = True

        # log info
        currentTrial += 1
        totalKeyPresses = 0
        totalValidKeyPresses = 0
        justPoppedBalloon = 0
        justSavedBalloon = 0
        updateLog = 0

        counter.setText("Spells cast: %d" % totalSaved)

        if trial_debug_mode:
            if currentTrial != debug_trial:
                continue
            else:
                print "Testing trial %d now..." % debug_trial
      End Routine:
        # to make clear that start of next routine in loop is not immediate victory
        balloon.pos[1] = 0
        dropped_this_trial = win.nDroppedFrames - frames_dropped_so_far
        print "Trial %d: Overall, %i frames were dropped during the avoidance phase of this trial." % (currentTrial, dropped_this_trial)
      End Experiment:
        f.close()
        y.close()
      Each Frame:
        # initializing defaults for logs
        keyJustPressed = '0'
        validKeyPress = 'NA'


        # moving wand when arrow keys are clicked during the main part of the trial
        if startedTrial:
            new_wand_position = wand_position
            if event.getKeys([right_key]):
                updateLog = 1
                keyJustPressed = 'right'
                totalKeyPresses += 1
                validKeyPress = '0'
                if wand_position[0] + wand_width/2 + wand_step_size < screen_width/2:
                    new_wand_position = (wand_position[0] + wand_step_size, wand_position[1])
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys([left_key]):
                updateLog = 1
                keyJustPressed = 'left'
                totalKeyPresses += 1
                validKeyPress = '0'
                if wand_position[0] - wand_width/2 - wand_step_size > -screen_width/2:
                    new_wand_position = (wand_position[0] - wand_step_size, wand_position[1])
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys([up_key]):
                updateLog = 1
                keyJustPressed = 'up'
                totalKeyPresses += 1
                validKeyPress = '0'
                if wand_position[1] + wand_height/2 + wand_step_size < screen_height/2:
                    new_wand_position = (wand_position[0], wand_position[1] + wand_step_size)
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys([down_key]):
                updateLog = 1
                keyJustPressed = 'down'
                totalKeyPresses += 1
                validKeyPress = '0'
                if wand_position[1] - wand_height/2 - wand_step_size > -screen_height/2:
                    new_wand_position = (wand_position[0], wand_position[1] - wand_step_size)
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            else:
                keyJustPressed = ''.join(event.getKeys())
                if keyJustPressed != '':
                    updateLog = 1
                    validKeyPress = '0'
                    totalKeyPresses += 1
            if wand_position != new_wand_position:
                wand_position = new_wand_position


        # moving the balloon during the main part of the trial
        if not timeToPop and startedTrial:
            balloonPosition = (balloonPosition[0] + balloonShift[0], balloonPosition[1] + balloonShift[1]) # starting just off screen
            # reverse x-speed whenever a "zigzag line" is crossed
            if len(zigs) > 0:
                zig_line_position = zigs[0]
                # if within 6 pixels of zigzag line, x-speed reverses (+/- 6 means condition always triggers since max speed is 9)
                if abs(balloonPosition[0] - zig_line_position) < 6:
                    balloonShift = (-balloonShift[0], balloonShift[1])
                    zigs.pop(0)

        # signaling when the main part of the trial has started
        if t > anticipatoryPeriod:
            if startedTrial == 0:
                frames_dropped_so_far = win.nDroppedFrames
            startedTrial = 1

        # measuring distance between wand an balloon
        xDist = wand_position[0] - balloonPosition[0]
        yDist = wand_position[1] - balloonPosition[1]

        # if balloon reaches top, balloon will pop
        if balloonPosition[1] > top_of_catchable_area and success == 0:
            if timeToPop == 0:
                time_of_popping = t
                justPoppedBalloon = 1
                totalPopped += 1
                balloonImage = media + "pop_1.png"
                updateLog = 1
                magic_sound.status = FINISHED
                magic.status = FINISHED
                if not isYokedParticipant:
                    yokingParams = [id, str(currentTrial), "0", "NA"] # 0 means balloon not touched (and touching time is NA)
                    y.write("\t".join(yokingParams + ["\n"]))
            else:
                justPoppedBalloon = 0
            if t > time_of_popping + .2:
                balloonImage = media + "pop_2.png"
            timeToPop = 1
        elif t > anticipatoryPeriod + .2 and yDist in collision_space_by_y and xDist >= collision_space_by_y[yDist][0] and xDist <= collision_space_by_y[yDist][1]:
            # note that you need the .2 second buffer to guarantee objects are initialized before the test
            if success == 0:
                successClock.reset()
                justSavedBalloon = 1
                totalSaved += 1
                updateLog = 1
                if not isYokedParticipant:
                    yokingParams = [id, str(currentTrial), str(justSavedBalloon), str(t)]
                    y.write("\t".join(yokingParams + ["\n"]))
                counter.setText("Spells cast: %d" % totalSaved)
            else:
                justSavedBalloon = 0
            success = 1
            if not isYokedParticipant: aversive_pop.status = FINISHED

        # logging
        logInfo = [id, str(datetime.now()), str(currentTrial), str(t), str(balloonPosition[0]), str(balloonPosition[1]),
            str(wand_position[0]), str(wand_position[1]), keyJustPressed, validKeyPress, str(totalKeyPresses), str(totalValidKeyPresses),
            str(justPoppedBalloon), str(justSavedBalloon), str(totalPopped), str(totalSaved)]

        if updateLog == 1:
            f.write("\t".join(logInfo + ["\n"]))
            updateLog = 0
    ImageComponent antic_background
      stopVal [duration (s)] = anticipatoryPeriod
      durationEstim = 4
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $media + "Anticipatory_period_background.jpg"
      size = (screen_width, screen_height)
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    ImageComponent avoid_background
      stopVal [condition] = t>=endTrialTime
      durationEstim = 4.5
      units = pix
      startVal [condition] = t >= anticipatoryPeriod
      image = $media + "Avoidance_period_background.jpg"
      size = (screen_width, screen_height)
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    ImageComponent balloon
      stopVal [condition] = t>=endTrialTime
      pos [set every frame] = balloonPosition
      units = pix
      ori = 45
      startVal [time (s)] = t>=anticipatoryPeriod
      image [set every frame] = $balloonImage
      size = (120, 150)
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    ImageComponent wand
      stopVal [condition] = timeToPop or t>endTrialTime
      durationEstim = 4
      pos [set every frame] = wand_position
      units = pix
      startVal [time (s)] = t>=anticipatoryPeriod
      image = $media + "magic_wand.png"
      size = (80, 70)
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    SoundComponent aversive_pop
      sound = $media + "Balloon_Pop.wav"
      volume [set every repeat] = $popVolume
      startVal [condition] = timeToPop and not success
    ImageComponent ITI
      stopVal [duration (s)] = itiLength
      durationEstim = 10
      startEstim = 8
      units = pix
      startVal [condition] = t >= endTrialTime
      image = $media + "iti_background.jpg"
      size = (screen_width, screen_height)
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    ImageComponent counter_background
      stopVal [condition] = t > endTrialTime
      pos = (550, -435)
      units = pix
      startVal [time (s)] = 0.0
      image = $media + "label_background.png"
      size = (175, 45)
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    TextComponent counter
      color = #053270
      stopVal [condition] = t >= endTrialTime
      pos = (550, -432)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 24
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    ImageComponent magic
      opacity = .75
      stopVal [duration (s)] = 1.5
      pos [set every frame] = (balloon.pos[0] + 5, balloon.pos[1] + 30)
      units = pix
      startVal [condition] = justSavedBalloon == 1
      image = $media + "magic-effect.png"
      size = (150, 150)
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    SoundComponent magic_sound
      sound = $media + "magic-sound-trimmed.wav"
      volume = .5
      startVal [time (s)] = justSavedBalloon == 1
Flow
  Routine initialize
  Routine game_instr
  Routine wand_practice
  Routine game_instr_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine balloons
  LoopTerminator trials
  Routine thanks
