PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'test'}
  Units = use prefs
  Enable Escape = False
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save log file = False
  Save wide csv file = False
  Show info dlg = False
  expName = playground
  Screen = 1
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Routines
  Routine test_magic
    CodeComponent code
      Begin Experiment:
        from optparse import OptionParser
        from subprocess import Popen
        import re

        # collect runtime options (can be supplied via command line, or the wrapper script can do it automatically)
        parser = OptionParser()
        parser.add_option("-s", "--source", metavar="SOURCE_DIR", dest="source_dir", help="the local sc task directory")
        (options, args) = parser.parse_args()
        project_dir = options.source_dir
        if not project_dir:
            cwd = os.getcwd()
            project_dir = os.path.abspath("%s/.." % cwd)
            print "Project source not indicated with \"-s\" option, so guessing that it's %s..." % project_dir

        if not project_dir:
            parser.print_help()
            core.quit()

        if not os.access(project_dir, os.R_OK):
            print "Error: The specified project directory (%s) is either invalid or not readable." % project_dir
            sys.exit()


        # folder that holds images and sounds used in the experiment
        media = project_dir + "/sc_media/"

        # distance wand moves per step (in pixels)
        wand_step_size = 80

        # screen size (these values just reflect what is already set by Psychopy)
        screen_width = 1440
        screen_height = 900


        balloonImage = media + "pink_balloon.png"
        magic_opacity = 0

        left_key = 'left'
        right_key = 'right'
        up_key = 'up'
        down_key = 'down'
      Begin Routine:
        wand_position = (0, -.8 * screen_height/2)
        balloon_pos = (0, 0)

        collision_space = set()
        defining_collision = False
      End Routine:
        collision_space_by_y = {}
        for x, y in collision_space:
            if y in collision_space_by_y:
                collision_space_by_y[y].append(x)
            else:
                collision_space_by_y[y] = [x]

        for y_coord, x_coords in sorted(collision_space_by_y.items()):
            print "%d\t%d\t%d" % (y_coord, min(x_coords), max(x_coords))
      Each Frame:
        # testing if the wand has reached the balloon
        xDist = wand.pos[0] - balloon.pos[0]
        yDist = wand.pos[1] - balloon.pos[1]
        label.setText("%d, %d" % (int(xDist), int(yDist)))

        if defining_collision:
            if (xDist, yDist) not in collision_space:
                collision_space.add((xDist, yDist))
            magic_opacity = .75
        else:
            if (xDist, yDist) in collision_space:
                magic_opacity = .75
            else:
                magic_opacity = 0

        new_wand_position = wand_position
        if event.getKeys([right_key]):
            if wand_position[0] + wand.size[0]/2 + wand_step_size < screen_width/2:
                new_wand_position = (wand_position[0] + wand_step_size, wand_position[1])
        elif event.getKeys([left_key]):
            if wand_position[0] - wand.size[0]/2 - wand_step_size > -screen_width/2:
                new_wand_position = (wand_position[0] - wand_step_size, wand_position[1])
        elif event.getKeys([up_key]):
            if wand_position[1] + wand.size[1]/2 + wand_step_size < screen_height/2:
                new_wand_position = (wand_position[0], wand_position[1] + wand_step_size)
        elif event.getKeys([down_key]):
            if wand_position[1] - wand.size[1]/2 - wand_step_size > -screen_height/2:
                new_wand_position = (wand_position[0], wand_position[1] - wand_step_size)
        if wand_position != new_wand_position:
            wand_position = new_wand_position

        if event.getKeys(['a']):
            balloon_pos = (balloon.pos[0] - 1, balloon.pos[1])
        elif event.getKeys(['d']):
            balloon_pos = (balloon.pos[0] + 1, balloon.pos[1])
        elif event.getKeys(['w']):
            balloon_pos = (balloon.pos[0], balloon.pos[1] + 1)
        elif event.getKeys(['s']):
            balloon_pos = (balloon.pos[0], balloon.pos[1] - 1)
        elif event.getKeys(['space']):
            if (xDist, yDist) in collision_space:
                collision_space.remove((xDist, yDist))
                defining_collision = False
            else:
                defining_collision = True

        elif event.getKeys(['q']):
            continueRoutine = False
    ImageComponent avoid_background
      durationEstim = 4.5
      units = pix
      startVal [time (s)] = 0
      image = $media + "Avoidance_period_background.jpg"
      size = (screen_width, screen_height)
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    ImageComponent balloon
      pos [set every frame] = balloon_pos
      interpolate = nearest
      units = pix
      ori = 45
      startVal [time (s)] = 0
      image = $media + "pink_balloon.png"
      size [set every frame] = (120, 150)
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    ImageComponent wand
      durationEstim = 4
      pos [set every frame] = wand_position
      interpolate = nearest
      units = pix
      startVal [time (s)] = 0
      image = $media + "magic_wand.png"
      size = (80, 70)
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    ImageComponent magic
      opacity [set every frame] = magic_opacity
      pos [set every frame] = (balloon.pos[0] + 5, balloon.pos[1] + 30)
      units = pix
      startVal [time (s)] = 0
      image = $media + "magic-effect.png"
      size = (150, 150)
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    ImageComponent label_background
      pos = (550, -435)
      units = pix
      startVal [time (s)] = 0.0
      image = $media + "label_background.png"
      size = (175, 45)
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    TextComponent label
      color = #053270
      pos = (550, -432)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 24
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Flow
  Routine test_magic
