PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'participantID': u'preselected'}
  Units = norm
  Enable Escape = False
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save wide csv file = False
  Data filename = "EggGame_%s" % expInfo['date']
  Show info dlg = False
  expName = EggGame
  Screen = 1
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Routines
  Routine Eggs
    CodeComponent code
      Begin Experiment:
        # y speeds
        ySpeed1 = -.009
        ySpeed2 = -.008
        ySpeed3 = -.007

        # xSpeeds
        xSpeed1 = 0
        xSpeed2 = .002
        xSpeed3 = .003
        xSpeed4 = .005

        # egg starting X positions and per-frame X/Y movements
        eggSettings = [(0, xSpeed1, ySpeed2), (-.5, xSpeed3, ySpeed3), (.8, -xSpeed2, ySpeed3),
                        (-.9, xSpeed3, ySpeed2), (-.5, xSpeed1, ySpeed1), (.9, -xSpeed4, ySpeed2),
                        (.2, xSpeed2, ySpeed2), (-.8, xSpeed4, ySpeed1), (.1, xSpeed2, ySpeed1),
                        (-.3, -xSpeed3, ySpeed2), (.7, -xSpeed2, ySpeed1), (.3, -xSpeed4, ySpeed3),
                        (-.8, xSpeed1, ySpeed2), (-.7, xSpeed4, ySpeed1), (.1, -xSpeed3, ySpeed2),
                        (-.5, xSpeed3, ySpeed3), (.8, -xSpeed2, ySpeed3), (.9, -xSpeed4, ySpeed2),
                        (-.9, xSpeed3, ySpeed2), (-.5, xSpeed1, ySpeed1), (.1, -xSpeed3, ySpeed2),
                        (.2, xSpeed2, ySpeed2), (-.8, xSpeed4, ySpeed1), (0, xSpeed1, ySpeed2),
                        (.1, xSpeed2, ySpeed1), (-.3, -xSpeed3, ySpeed2), (.7, -xSpeed2, ySpeed1),
                        (.3, -xSpeed4, ySpeed3), (-.8, xSpeed1, ySpeed2), (-.7, xSpeed4, ySpeed1)]
        eggDegrees = 0

        # log info
        currentTrial = 0
        f = open(outputFile, 'w')
        f.write("# Version: %s\n" % version)
        f.write("ID\tTime\tTrial\tRel_time\tX_egg\tY_egg\tX_hand\tY_hand\tkey_just_pressed\tvalid_key_press\t" +
        "total_key_presses\ttotal_valid_key_presses\tjust_cracked_egg\n")
      Begin Routine:
        # indicator variable to track if it's time to pop the balloon
        timeToCrack = 0
        startedTrial = 0

        currentEggSettings = eggSettings.pop(0)
        eggPosition = (currentEggSettings[0], .85)
        eggShift = (currentEggSettings[1], currentEggSettings[2])
        handPosition = (-.7, .6)
        eggDegrees = 0

        # log info
        currentTrial += 1
        totalKeyPresses = 0
        totalValidKeyPresses = 0
        justCrackedEgg = 0
        updateLog = 0

        if trialDebugMode:
            if currentTrial != debugTrial:
                print "This trial is " + str(currentTrial) + ", debug trial is " + str(debugTrial)
                continue
      End Routine:
        # need to get egg offscreen in the positive direction
        egg.pos[1] = 2
      End Experiment:
        f.close()
      Each Frame:
        # initializing defaults for logs
        keyJustPressed = '0'
        validKeyPress = 'NA'


        # moving hand when arrow keys are clicked during the main part of the trial
        if startedTrial and not timeToCrack:
            if event.getKeys([right_key]):
                updateLog = 1
                keyJustPressed = 'right'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[0] < .8:
                    handPosition = (handPosition[0] + .1, handPosition[1])
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys([left_key]):
                updateLog = 1
                keyJustPressed = 'left'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[0] > -.8:
                    handPosition = (handPosition[0] - .1, handPosition[1])
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys([up_key]):
                updateLog = 1
                keyJustPressed = 'up'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[1] < .8:
                    handPosition = (handPosition[0], handPosition[1] + .1)
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys([down_key]):
                updateLog = 1
                keyJustPressed = 'down'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[1] > -.8:
                    handPosition = (handPosition[0], handPosition[1] - .1)
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            else:
                keyJustPressed = ''.join(event.getKeys())
                if keyJustPressed != '':
                    updateLog = 1
                    totalKeyPresses += 1
                    validKeyPress = '0'

        # moving the egg during the main part of the trial
        if not timeToCrack and startedTrial:
            eggPosition = (egg.pos[0] + eggShift[0], egg.pos[1] + eggShift[1])
            eggDegrees += 5

        # signaling when the main part of the trial has started
        if t > anticipatoryPeriod:
            startedTrial = 1

        # if balloon reaches top, balloon will pop (so don't need the success component)
        if egg.pos[1] < -.85:
            if timeToCrack == 0:
                justCrackedEgg= 1
                updateLog = 1
            else:
                justCrackedEgg = 0
            timeToCrack = 1


        # logging
        logInfo = [id, str(datetime.now()), str(currentTrial), str(t), str(egg.pos[0]), str(egg.pos[1]),
            str(the_hand.pos[0]), str(the_hand.pos[1]), keyJustPressed, validKeyPress, str(totalKeyPresses), str(totalValidKeyPresses),
            str(justCrackedEgg)]

        if updateLog == 1:
            f.write("\t".join(logInfo + ["\n"]))
            updateLog = 0
    ImageComponent antic_background
      stopVal [duration (s)] = anticipatoryPeriod
      durationEstim = 4
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $media + "T2_Anticipatory_background.jpg"
      size = (2,2)
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    ImageComponent avoid_background
      stopVal [condition] = timeToCrack
      durationEstim = 4
      units = norm
      startVal [condition] = t > anticipatoryPeriod
      image = $media + "T2_Avoidance_background.jpg"
      size = (2, 2)
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    ImageComponent egg
      stopVal [condition] = timeToCrack
      pos [set every frame] = eggPosition
      units = norm
      ori [set every frame] = eggDegrees
      startVal [time (s)] = 4.0
      image = $media + "egg.png"
      size [set every frame] = (0.1, 0.1)
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    ImageComponent the_hand
      stopVal [condition] = timeToCrack
      durationEstim = 4
      pos [set every frame] = handPosition
      units = norm
      startVal [time (s)] = 4
      image = $media + "hand.png"
      size = (0.1, 0.1)
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    SoundComponent aversive_crack
      sound = $media + "egg_crack.wav"
      startVal [condition] = timeToCrack
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    ImageComponent ITI
      stopVal [duration (s)] = $itiLength
      durationEstim = 10
      startEstim = 8
      units = norm
      startVal [condition] = timeToCrack
      image = $media + "iti_background.jpg"
      size = (2, 2)
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  Routine Practicehand
    CodeComponent code_3
      Begin Experiment:
        handPosition = (0, 0)
      Begin Routine:
        if trialDebugMode:
            continueRoutine = False
      Each Frame:
        # moving hand when arrow keys are clicked during the main part of the trial
        if event.getKeys([right_key]):
            if handPosition[0] < .8:
                handPosition = (handPosition[0] + .1, handPosition[1])
        if event.getKeys([left_key]):
            if handPosition[0] > -.8:
                handPosition = (handPosition[0] - .1, handPosition[1])
        if event.getKeys([up_key]):
            if handPosition[1] < .8:
                handPosition = (handPosition[0], handPosition[1] + .1)
        if event.getKeys([down_key]):
            if handPosition[1] > -.8:
                handPosition = (handPosition[0], handPosition[1] - .1)
    ImageComponent theHand
      stopVal [duration (s)] = 20
      pos [set every frame] = handPosition
      units = norm
      startVal [time (s)] = 0
      image = $media + "hand.png"
      size = (0.15, 0.15)
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    ImageComponent Thankyou
      startVal [time (s)] = 0.0
      image = $instructionSlides + "Slide19.jpg"
      size = (2,2)
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    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine initialize
    CodeComponent starter_code
      Begin Experiment:
        from optparse import OptionParser, SUPPRESS_HELP
        from subprocess import Popen, call

        # collect runtime options (can be supplied via command line, or the wrapper script can do it automatically)
        parser = OptionParser()
        parser.add_option("-s", "--source", metavar="SOURCE_DIR", dest="source_dir", help="the local sc task directory")
        parser.add_option("-i", "--id", metavar="ID", dest="id", help="the participant ID")
        parser.add_option("-o", "--output", metavar="OUTPUT_DIR", dest="output_dir", help="the directory where output/logs should be saved")
        parser.add_option("-B", "--button_box", action="store_true", default=False, dest="button_box_mode", help="use button box input (1-4 instead of right, down, left, up)")
        parser.add_option("-v", "--version", metavar="VERSION", dest="version", default="unknown", help=SUPPRESS_HELP)

        (options, args) = parser.parse_args()
        projectDir = options.source_dir
        outputDir = options.output_dir
        id = options.id
        version= options.version
        button_box_mode = options.button_box_mode

        if button_box_mode:
            right_key = "1"
            down_key = "2"
            left_key = "3"
            up_key = "4"
        else:
            right_key = "right"
            down_key = "down"
            left_key = "left"
            up_key = "up"


        if not projectDir or not outputDir or not id:
            Popen("sleep 5; rm %s.log %s.psydat" %(filename, filename), shell=True)
            parser.print_help()
            core.quit()

        logDir = outputDir + '/logs'
        if not os.path.exists(logDir): os.mkdir(logDir)

        # Moving Psychopy's automatic log files to a better location
        new_filename = "%s/NoiseRating_%s_%s" % (logDir, id, expInfo['date'])
        call("mv %s* %s.log" % (filename, new_filename), shell=True)
        filename = new_filename


        media = projectDir + "/sc_media/"
        instructionSlides = media + "Egg_instruction_slides/"

        # import datetime
        from datetime import datetime


        # define output file
        outputFile = "%s/EggGame_%s_%s_data.txt" %(outputDir, id, expInfo['date'])


        # length of anticipatory period (before each trial starts)
        anticipatoryPeriod = 4

        # length of time between trials (for MRI synching)
        itiLength = 10

        # allowing a mode for debugging specific trials
        trialDebugMode = False
        debugTrial = 0
        for i in range(1, 31): # that's python for 1-30!
            if id == ("test" + str(i)):
                trialDebugMode = True
                debugTrial = i
                itiLength = 1

        # allowing a test mode with shortened waiting periods
        if id == "test":
            itiLength = 1
      End Experiment:
        print "Finished the game!"
  Routine get_ready
    ImageComponent InstructSlide14
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (2,2)
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    KeyboardComponent key_resp_16
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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    CodeComponent debug_break
      Begin Routine:
        currentInstructionNumber = 15

        if trialDebugMode:
            continueRoutine = False
      Each Frame:
        # all slides advance with a space, except for the last one
        if event.getKeys('space') and currentInstructionNumber != 19:
            currentInstructionNumber += 1
        elif event.getKeys('right') and currentInstructionNumber == 19:
            currentInstructionNumber += 1

        if currentInstructionNumber == 19:
            break

        currentInstructionString = str(currentInstructionNumber)
        if currentInstructionNumber < 10:
            currentInstructionString = "0" + currentInstructionString
        currentInstructionFile = instructionSlides + "Slide" + currentInstructionString + ".jpg"
  Routine instructions
    CodeComponent iterate_instruction
      Begin Routine:
        currentInstructionNumber = 1

        if trialDebugMode:
            continueRoutine = False
      Each Frame:
        # all slides advance with a space, except slides 9, 10, 11, 12 (arrow key slides)
        if event.getKeys('space') and (currentInstructionNumber < 8 or currentInstructionNumber > 11):
            currentInstructionNumber += 1
        if event.getKeys('left') and currentInstructionNumber == 8:
            currentInstructionNumber += 1
        if event.getKeys('right') and currentInstructionNumber == 9:
            currentInstructionNumber += 1
        if event.getKeys('down') and currentInstructionNumber == 10:
            currentInstructionNumber += 1
        if event.getKeys('up') and currentInstructionNumber == 11:
            currentInstructionNumber += 1

        if currentInstructionNumber == 13:
            continueRoutine = False

        currentInstructionString = str(currentInstructionNumber)
        if currentInstructionNumber < 10:
            currentInstructionString = "0" + currentInstructionString
        currentInstructionFile = instructionSlides + "Slide" + currentInstructionString + ".jpg"
    KeyboardComponent user_start_signal
      forceEndRoutine = False
      allowedKeys = 'space', 'right', 'left', 'up', 'down'
      startVal [time (s)] = 0
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    ImageComponent instruction
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (2,2)
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Flow
  Routine initialize
  Routine instructions
  Routine Practicehand
  Routine get_ready
  LoopInitiator Trial_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine Eggs
  LoopTerminator Trial_loop
  Routine thanks
