PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'participantID': u''}
  Units = use prefs
  Enable Escape = False
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save wide csv file = False
  Data filename = "NoiseRating_%s" % expInfo['date']
  Show info dlg = False
  expName = noise
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        from optparse import OptionParser
        from subprocess import Popen, call

        # collect runtime options (can be supplied via command line, or the wrapper script can do it automatically)
        parser = OptionParser()
        parser.add_option("-s", "--source", metavar="SOURCE_DIR", dest="source_dir", help="the local sc task directory")
        parser.add_option("-i", "--id", metavar="ID", dest="id", help="the participant ID")
        parser.add_option("-o", "--output", metavar="OUTPUT_DIR", dest="output_dir", help="the directory where output/logs should be saved")
        parser.add_option("-v", "--version", metavar="VERSION", dest="version", help="current version of code (don't invoke this option manually)", default="unknown")

        (options, args) = parser.parse_args()
        projectDir = options.source_dir
        outputDir = options.output_dir
        id = options.id
        version = options.version

        if not projectDir or not outputDir or not id:
            Popen("sleep 5; rm %s.log %s.psydat" %(filename, filename), shell=True)
            parser.print_help()
            core.quit()

        logDir = outputDir + '/logs'
        if not os.path.exists(logDir): os.mkdir(logDir)

        # Moving Psychopy's automatic log files to a better location
        new_filename = "%s/NoiseRating_%s_%s" % (logDir, id, expInfo['date'])
        call("mv %s* %s.log" % (filename, new_filename), shell=True)
        filename = new_filename

        # path of folder containing the sounds
        media = projectDir + '/sc_media/'

        # A and B are Psychopy placeholders for the netural sounds
        soundsToRate = [media + 'chime.wav', media + 'Balloon_Pop.wav', media + 'SHAPES_USE.wav', media + 'egg_crack.wav']

        # slides that are cycled through for each sound to be rated
        instructionSlide = media + 'Noise_Rating_Slides/InstructionSlide.jpg'
        ratingSlide = media + 'Noise_Rating_Slides/RatingSlide.jpg'
        fixationSlide = media + 'iti_background.jpg'

        # start off with the instruction slide and the first sound
        currentSlide = instructionSlide
        playSoundNow = False

        # valid participant ID
        import re
        pattern = '^[A-Za-z0-9][A-Za-z0-9_\-]*$'
        if not re.search(pattern, id):
            print "Error: Invalid or missing participant ID."
            print "The participant ID must start with a letter or number, and it can only contain numbers, letters, hyphens, and underscores."
            core.quit()

        outputFile = "%s/NoiseRating_%s_%s.txt" % (outputDir, id, expInfo['date'])
        f = open(outputFile, 'w')
        f.write("# Version: %s\n" % version)
        f.write("Participant\tNoise\tRating\n")
      Begin Routine:
        currentSound = soundsToRate.pop(0)
      End Experiment:
        f.close()
        print "Finished run!"
      Each Frame:
        if currentSlide == instructionSlide and event.getKeys('space'):
            currentSlide = fixationSlide


        elif currentSlide == fixationSlide:
            # if the sound hasn't been played, wait a short period and then play it
            if soundToRate.status != FINISHED:
                core.wait(0.5)
                playSoundNow = True
            # if the sound is finished playing, go to the next slide
            else:
                currentSlide = ratingSlide
                playSoundNow = False

        elif currentSlide == ratingSlide:
            keys = event.getKeys()
            try:
                rating = int(keys[0])
            except:
                pass
            else:
                f.write("%s\t%s\t%d\n" %(id, currentSound, rating))
                currentSlide = instructionSlide
                continueRoutine = False
    KeyboardComponent key_listener
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent Slide
      startVal [time (s)] = 0
      image [set every frame] = $currentSlide
      size = (2, 2)
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    SoundComponent soundToRate
      sound [set every repeat] = $currentSound
      stopVal [duration (s)] = 1
      startVal [condition] = playSoundNow
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Flow
  LoopInitiator sounds loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator sounds
