PsychoPy2experiment version="1.84.1"
Settings
  Data filename = '/Users/ecohodes/Dropbox/sc/sc_output/BalloonGame/logs/%s_%s' % (expName, expInfo['date'])
  Monitor = testMonitor
  Enable Escape = False
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'isNonstressed': u'preselected', u'yoke_source': u'preselected', u'participantID': u'preselected'}
  Save wide csv file = False
  expName = FINAL_PILOT_SC_11.28
  Units = norm
  Screen = 1
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Routines
  Routine boring_instr
    CodeComponent break_logic2
      Begin Routine:
        currentInstructionNumber = 1
        if trialDebugMode or not boringMode:
            continueRoutine = False
      Each Frame:
        # all slides advance with a space
        if event.getKeys('space'):
            currentInstructionNumber += 1

        if currentInstructionNumber == 11:
            break

        currentInstructionString = str(currentInstructionNumber)
        if currentInstructionNumber < 10:
            currentInstructionString = "0" + currentInstructionString
        currentInstructionFile = boringInstructionSlides + "Slide" + currentInstructionString + ".jpg"
    ImageComponent instruction
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (2, 2)
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  Routine hand_practice
    CodeComponent code_3
      Begin Experiment:
        handPosition = (0, 0)
      Begin Routine:
        if trialDebugMode or boringMode:
            continueRoutine = False
      Each Frame:
        # moving hand when arrow keys are clicked during the main part of the trial
        if event.getKeys(['right']):
            if handPosition[0] < .8:
                handPosition = (handPosition[0] + .1, handPosition[1])
        if event.getKeys(['left']):
            if handPosition[0] > -.8:
                handPosition = (handPosition[0] - .1, handPosition[1])
        if event.getKeys(['up']):
            if handPosition[1] < .8:
                handPosition = (handPosition[0], handPosition[1] + .1)
        if event.getKeys(['down']):
            if handPosition[1] > -.8:
                handPosition = (handPosition[0], handPosition[1] - .1)
    ImageComponent theHand
      stopVal [duration (s)] = 20
      pos [set every frame] = handPosition
      units = norm
      startVal [time (s)] = 0
      image = $media + "hand.png"
      size = (0.15, 0.15)
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions_boring
    CodeComponent instr_logic
      Begin Routine:
        if not boringMode:
            continueRoutine = False

        if trialDebugMode:
            continueRoutine = False
  Routine game_instr
    CodeComponent instuction_logic
      Begin Routine:
        currentInstructionNumber = 1

        if trialDebugMode or boringMode:
            continueRoutine = False
      Each Frame:
        # all slides advance with a space, except slides 9, 10, 11, 12 (arrow key slides)
        if event.getKeys('space') and (currentInstructionNumber < 9 or currentInstructionNumber > 12):
            currentInstructionNumber += 1
        if event.getKeys('left') and currentInstructionNumber == 9:
            currentInstructionNumber += 1
        if event.getKeys('right') and currentInstructionNumber == 10:
            currentInstructionNumber += 1
        if event.getKeys('down') and currentInstructionNumber == 11:
            currentInstructionNumber += 1
        if event.getKeys('up') and currentInstructionNumber == 12:
            currentInstructionNumber += 1

        if currentInstructionNumber == 14:
            continueRoutine = False

        currentInstructionString = str(currentInstructionNumber)
        if currentInstructionNumber < 10:
            currentInstructionString = "0" + currentInstructionString
        currentInstructionFile = instructionSlides + "Slide" + currentInstructionString + ".jpg"
    KeyboardComponent get_key_press
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0
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    ImageComponent slides
      units = norm
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (2, 2)
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  Routine thanks
    ImageComponent Thankyo
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      image = $instructionSlides + "Slide19.jpg"
      size = (2,2)
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    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine initialize
    CodeComponent init
      Begin Experiment:
        # project directory (edit this line if installing on a new system)
        projectDir = '/Users/ecohodes/Dropbox/sc/'

        # import time function module
        from datetime import datetime

        # folder that holds images and sounds used in the experiment
        media = projectDir + "sc_media/"
        instructionSlides = media + "Balloon_instruction_slides/"
        boringInstructionSlides = media + "Balloon_nonstressed_instruction_slides/"

        # indicates if the game should be played in the non-stressed (boring) mode
        boringMode = False

        # validate that an experimental ID has been selected
        id = expInfo['participantID']
        if id == '':
            print "Error: No participant ID was entered."
            core.quit()
        elif id == 'preselected':
            try:
                id = sys.argv[1]
            except:
                print "Error: No participant ID was entered."
                core.quit()




        # setting up where to store output data
        outputDir = projectDir + "sc_output/BalloonGame"
        outputFile = outputDir + '/' + expInfo['date'] + '_ID_' + id + '_data.txt'
        f = open(outputFile, 'w')

        # setting up for unyoked participants (uncontrollable stress)
        yokingOutputDir = projectDir + "yoking_files/"

        isYokedParticipant = False
        yokeSourceFile = 'NA'

        if expInfo['yoke_source'] == 'preselected':
            try:
                yokeSourceFile = sys.argv[2]
                if yokeSourceFile == "1" or yokeSourceFile == "0":
                    yokeSourceFile = 'NA'
            except:
                yokeSourceFile = 'NA'
                print "Warning: No yoking source file found, so running controllable stress game"
        elif expInfo['yoke_source'] != '':
            yokeSourceFile = expInfo['yoke_source']

        if yokeSourceFile != 'NA':
            isYokedParticipant = True
            try:
                y = open(yokeSourceFile, 'r')
            except:
                print "Error: Could not open yoke source file %s" %(yokeSourceFile)
                core.quit()
        else:
            yokingOutputFile = yokingOutputDir + '/' + expInfo['date'] + '_ID_' + id + '_yoke.txt'
            try:
                y = open(yokingOutputFile, 'w')
            except:
                print "Error: Could not create yoke source file %s" %(yokeSourceFile)
                core.quit()

        # turn on the non-stressed mode, if applicable
        try:
            isBoring = sys.argv[3]
            if isBoring == "1":
                boringMode = True
        except:
            isBoring = expInfo['isNonstressed']
            if isBoring == "1" or isBoring == "yes":
                boringMode = True
            else:
                print "Assuming that the game should not be boring."

        if (boringMode and not isYokedParticipant):
            print "Error: Non-stressed (boring) condition was selected without a yoking source file being specified."
            core.quit()


        # length of anticipatory period (before each trial starts)
        anticipatoryPeriod = 4

        # length of time between trials (for MRI synching)
        itiLength = 10

        # allowing a mode for debugging specific trials
        trialDebugMode = False
        debugTrial = 0
        for i in range(1, 31): # that's python for 1-30!
            if id == ("test" + str(i)):
                trialDebugMode = True
                debugTrial = i
                itiLength = 1

        # allowing a test mode with shortened waiting periods
        if id == "test":
            itiLength = 1
      End Experiment:
        print "Finished the game!"
  Routine get_ready
    ImageComponent InstructSlide14
      startVal [time (s)] = 0.0
      image [set every frame] = $currentInstructionFile
      size = (2,2)
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    CodeComponent break_logic
      Begin Routine:
        currentInstructionNumber = 14

        if trialDebugMode or boringMode:
            continueRoutine = False
      Each Frame:
        # all slides advance with a space
        if event.getKeys('space') and currentInstructionNumber != 18:
            currentInstructionNumber += 1

        if event.getKeys('right') and currentInstructionNumber == 18:
            currentInstructionNumber +=1

        if currentInstructionNumber == 19:
            break

        currentInstructionString = str(currentInstructionNumber)
        if currentInstructionNumber < 10:
            currentInstructionString = "0" + currentInstructionString
        currentInstructionFile = instructionSlides + "Slide" + currentInstructionString + ".jpg"
  Routine balloons
    CodeComponent code
      Begin Experiment:
        # signals when the user has successfully halted the balloon
        success = 0

        # time when trial ends (regardless of catching balloon)
        endTrialTime = anticipatoryPeriod + 4

        # will be used to keep track of time after halting balloon
        successClock = core.Clock()

        # set balloon speed (x direction)
        xSpeed1 = .008
        xSpeed2 = .009
        xSpeed3 = .01
        xSpeed4 = -.008
        xSpeed5 = -.009
        xSpeed6 = -.01

        # set balloon speed (y direction)
        ySpeed1 = .01
        ySpeed2 = .01
        ySpeed3 = .01


        # different balloon starting X/Y positions and per-frame X/Y movements
        balloonSettings = [(.4, -1, xSpeed6, ySpeed1, [-.8, .8, -.8, .8, -.8, .8, -.8]),
        (.8, -1, xSpeed4, ySpeed1, [0, .7, -.2, .3, -.7, .7, -.8]),
        (-.7, -1, xSpeed2, ySpeed2, [0, -.5, .9, -.6, .7, -.5]),
        (-.4, -1, xSpeed2, ySpeed2, [.8, -.8, .8, -.8, 0, -.5]),
        (-.6, -1, xSpeed2, ySpeed3, [-.2, -.8, -.6, -.8, -.3, -.5, -.2]),
        (.7, -1, xSpeed4, ySpeed1, [-.8, .8, -.8, -.4, -.6, 0, -.3, .8, -.8]),
        (.1,-1, xSpeed2,ySpeed3, [.7, -.7, .7, 0, -.2, .3, -.7, .7, -.7]),
        (-.3, -1, xSpeed2, ySpeed2, [0, -.8, .6, -.8, .6]),
        (.9, -1, xSpeed6, ySpeed2, [0, .9, .3, .5, -.2,.8]),
        (-.8, -1, xSpeed1, ySpeed1, [-.3, -.7, -.2, -.8, -.1]),
        (.4, -1, xSpeed4, ySpeed2, [0, .8, -.3, .3, -.7, .8, -.6, 0]),
        (.5, -1, xSpeed6, ySpeed2, [0, .7, -.8, .8, 0, .5, -.5, .5, -.1]),
        (.5, -1, xSpeed4, ySpeed1, [0, .8, .1, -.1, 0, -.3, .3, -.5, .8]),
        (-.6, -1, xSpeed3, ySpeed1, [0, -.5, .9, -.7, .7, -.6]),
        (-.9, -1, xSpeed2, ySpeed3, [0, -.2, .3, -.4, .3, -.5, .7, -.8]), # 15
        (-.5, -1, xSpeed3, ySpeed1, [0, -.4, .3, -.1, .1, -.3, .4, -.5, .5, -.6, .6, -.7]),
        (.3, -1, xSpeed5, ySpeed3, [0, .7, -.2, .3, -.6, .7, -.8]),
        (.2,-1, xSpeed3,ySpeed1, [.4, .2, .8, .1, .8, .4, .6]),
        (-.3,-1, xSpeed2, ySpeed1, [-.2, -.7, .3, 0, .1, -.3, .3, -.5, .7]),
        (-.5, -1, xSpeed1, ySpeed2, [-.1, -.2, .2, -.4, .4,-.7]),
        (.8, -1, xSpeed4, ySpeed1, [0, .7, -.2, .3, -.7, .7, -.8]),
        (-.7, -1, xSpeed2, ySpeed2, [0, -.5, .9, -.6, .7, -.5]),
        (-.4, -1, xSpeed2, ySpeed2, [.8, -.8, .8, -.8, 0, -.5]),
        (-.6, -1, xSpeed2, ySpeed3, [-.2, -.8, -.6, -.8, -.3, -.5, -.2]),
        (.7, -1, xSpeed4, ySpeed1, [-.8, .8, -.8, -.4, -.6, 0, -.3, .8, -.8]),
        (.5,-1, xSpeed2,ySpeed3, [.7, -.7, .7, 0, -.2, .3, -.7, .7, -.7]),
        (-.8, -1, xSpeed1, ySpeed1, [-.3, -.7, -.2, -.8, -.1]),
        (.4, -1, xSpeed4, ySpeed2, [0, .8, -.3, .3, -.7, .8, -.6, 0]),
        (.8, -1, xSpeed6, ySpeed2, [0, .7, -.8, .8, 0, .5, -.5, .5, -.1]),
        (.5, -1, xSpeed4, ySpeed1, [0, .8, .1, -.1, 0, -.3, .3, -.5, .8]),
        (-.6, -1, xSpeed3, ySpeed1, [0, -.5, .9, -.7, .7, -.6]),
        (-.2, -1, xSpeed1, ySpeed2, [0, -.2, .2, -.4, .4,-.7]),
        (-.5, -1, xSpeed3, ySpeed1, [0, -.4, .3, -.1, .1, -.3, .4, -.5, .5, -.6, .6, -.7]),
        (-.3, -1, xSpeed2, ySpeed2, [0, -.8, .6, -.8, .6]),
        (.2, -1, xSpeed5, ySpeed3, [0, .7, -.2, .3, -.6, .7, -.8]),
        (.2,-1, xSpeed3,ySpeed1, [.4, .2, .8, .1, .8, .4, .6]),
        (.9, -1, xSpeed6, ySpeed2, [0, .9, .3, .5, -.2,.8]),
        (-.9, -1, xSpeed2, ySpeed3, [0, -.2, .3, -.4, .3, -.5, .7, -.8]),
        (-.3,-1, xSpeed2, ySpeed1, [-.2, -.7, .3, 0, .1, -.3, .3, -.5, .7])]

        # define starting hand positions
        handPositions = [(0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8),
                        (0, -.8), (0, -.8)]

        # log info
        currentTrial = 0
        totalPopped = 0
        totalSaved = 0

        # write data file headers
        f.write("ID\tTime\tTrial\tRel_time\tX_balloon\tY_balloon\tX_hand\tY_hand\tkey_just_pressed\tvalid_key_press\t" +
        "total_key_presses\ttotal_valid_key_presses\tjust_popped_balloon\tjust_saved_balloon\ttotal_popped\ttotal_saved\n")

        # write yoking file headers
        if (not isYokedParticipant):
            y.write("ID\tTrial\tBalloon_saved\tSuccess_time\n")
        else:
            y.readline() # skip header line
            previousParticipantOutcomes = y.readlines()
            if len(previousParticipantOutcomes) != 30:
                print "Error: Yoking file " + yokeSourceFile + " doesn't appear to have one line per trial."
                core.quit()

        # volume of aversive pop (gets changed to 0 in nonstressed condition)
        popVolume = 1
      Begin Routine:
        # indicator variable to track if it's time to pop the balloon
        timeToPop = 0
        success = 0
        startedTrial = 0
        timeSinceSuccess = 0

        currentBalloonSettings = balloonSettings.pop(0)
        balloonPosition = (currentBalloonSettings[0], currentBalloonSettings[1])
        print str(currentTrial) + "\t" + str(balloonPosition)
        balloonShift = (currentBalloonSettings[2], currentBalloonSettings[3])
        zigs = currentBalloonSettings[4]

        handPosition = (handPositions.pop(0))

        if boringMode:
            handOpacity = 0
            popVolume = 0
        else:
            handOpacity = 1

        if isYokedParticipant:
            trialInfo = previousParticipantOutcomes.pop(0).rstrip().split("\t")
            print "Using this line from yoke source file: " + "\t".join(trialInfo)
            balloonToBeSaved = False
            if trialInfo[-2] == "1":
                balloonToBeSaved = True
                safetySignalTime = float(trialInfo[-1])

        # log info
        currentTrial += 1
        totalKeyPresses = 0
        totalValidKeyPresses = 0
        justPoppedBalloon = 0
        justSavedBalloon = 0
        updateLog = 0

        if trialDebugMode:
            if currentTrial != debugTrial:
                print "This trial is " + str(currentTrial) + ", debug trial is " + str(debugTrial)
                continue
      End Routine:
        # to make clear that start of next routine in loop is not immediate victory
        balloon.pos[1] = 0
      End Experiment:
        f.close()
        y.close()
      Each Frame:
        # initializing defaults for logs
        keyJustPressed = '0'
        validKeyPress = 'NA'


        # moving hand when arrow keys are clicked during the main part of the trial
        # in controllable stress condition, hand freezes when balloon is saved (success), but not in uncontrollable condition
        if startedTrial and (not success or isYokedParticipant) and not timeToPop:
            if event.getKeys(['right']):
                updateLog = 1
                keyJustPressed = 'right'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[0] < .8:
                    handPosition = (handPosition[0] + .1, handPosition[1])
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys(['left']):
                updateLog = 1
                keyJustPressed = 'left'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[0] > -.8:
                    handPosition = (handPosition[0] - .1, handPosition[1])
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys(['up']):
                updateLog = 1
                keyJustPressed = 'up'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[1] < .8:
                    handPosition = (handPosition[0], handPosition[1] + .1)
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            elif event.getKeys(['down']):
                updateLog = 1
                keyJustPressed = 'down'
                totalKeyPresses += 1
                validKeyPress = '0'
                if handPosition[1] > -.8:
                    handPosition = (handPosition[0], handPosition[1] - .1)
                    validKeyPress = '1'
                    totalValidKeyPresses += 1
            else:
                keyJustPressed = ''.join(event.getKeys())
                if keyJustPressed != '':
                    updateLog = 1
                    validKeyPress = '0'
                    totalValidKeyPresses += 1


        # moving the balloon during the main part of the trial
        if (not success or isYokedParticipant) and not timeToPop and startedTrial:
            balloonPosition = (balloon.pos[0] + balloonShift[0], balloon.pos[1] + balloonShift[1]) # starting just off screen
            if len(zigs) > 0:
                if abs(balloon.pos[0] - zigs[0]) < .01:
                    balloonShift = (-balloonShift[0], balloonShift[1])
                    zigs.pop(0)

        # signaling when the main part of the trial has started
        if t > anticipatoryPeriod:
            startedTrial = 1


        # testing if the hand has reached the balloon (for controllable stress condition) or if it's time for a yoked participant to be saved
        xDist = abs(the_hand.pos[0] - balloon.pos[0])
        yDist = abs(the_hand.pos[1] - balloon.pos[1])

        # if balloon reaches top, balloon will pop (so don't need the success component)
        if balloon.pos[1] > .9 and success == 0:
            success_background.status = FINISHED
            if timeToPop == 0:
                justPoppedBalloon = 1
                totalPopped += 1
                updateLog = 1
                if not isYokedParticipant:
                    yokingParams = [expInfo['participantID'], str(currentTrial), "0", "NA"] # 0 means balloon not saved (and saving time is NA)
                    y.write("\t".join(yokingParams + ["\n"]))
            else:
                justPoppedBalloon = 0
            timeToPop = 1
        elif ((t > anticipatoryPeriod + .1 and xDist < .05 and yDist < .05 and not isYokedParticipant) or (isYokedParticipant and balloonToBeSaved and t >= safetySignalTime)):
            # note that you need the .1 second buffer so the hand is initialized before the test
            if success == 0:
                successClock.reset()
                justSavedBalloon = 1
                totalSaved += 1
                updateLog = 1
                if not isYokedParticipant:
                    yokingParams = [expInfo['participantID'], str(currentTrial), str(justSavedBalloon), str(t)]
                    y.write("\t".join(yokingParams + ["\n"]))
            else:
                justSavedBalloon = 0
            success = 1
            aversive_pop.status = FINISHED

        if (success):
            timeSinceSuccess = successClock.getTime()

        # logging
        logInfo = [expInfo['participantID'], str(datetime.now()), str(currentTrial), str(t), str(balloon.pos[0]), str(balloon.pos[1]),
            str(the_hand.pos[0]), str(the_hand.pos[1]), keyJustPressed, validKeyPress, str(totalKeyPresses), str(totalValidKeyPresses),
            str(justPoppedBalloon), str(justSavedBalloon), str(totalPopped), str(totalSaved)]

        if updateLog == 1:
            f.write("\t".join(logInfo + ["\n"]))
            updateLog = 0
    ImageComponent antic_background
      stopVal [duration (s)] = anticipatoryPeriod
      durationEstim = 4
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $media + "Anticipatory_period_background.jpg"
      size = (2,2)
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    ImageComponent avoid_background
      stopVal [condition] = success==1 or t>=endTrialTime
      durationEstim = 4
      units = norm
      startVal [condition] = t >= anticipatoryPeriod
      image = $media + "Avoidance_period_background.jpg"
      size = (2, 2)
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    ImageComponent success_background
      stopVal [condition] = t>=endTrialTime
      startEstim = 5
      units = norm
      startVal [condition] = success==1
      image [set every repeat] = $media + "Success_background.jpg"
      size = (2, 2)
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    ImageComponent balloon
      stopVal [condition] = timeToPop or t>=endTrialTime
      pos [set every frame] = balloonPosition
      units = norm
      startVal [time (s)] = t>=anticipatoryPeriod
      image = $media + "Balloons.png"
      size [set every frame] = (0.2, 0.2)
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    ImageComponent the_hand
      opacity [set every repeat] = $handOpacity
      stopVal [condition] = timeToPop or t>endTrialTime
      durationEstim = 4
      pos [set every frame] = handPosition
      units = norm
      startVal [time (s)] = t>=anticipatoryPeriod
      image = $media + "hand.png"
      size = (0.1, 0.1)
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    SoundComponent aversive_pop
      sound = $media + "Balloon_Pop.wav"
      volume [set every repeat] = $popVolume
      startVal [condition] = timeToPop and not success
    ImageComponent ITI
      stopVal [duration (s)] = itiLength
      durationEstim = 10
      startEstim = 8
      units = norm
      startVal [condition] = t >= endTrialTime
      image = $media + "iti_background.jpg"
      size = (2, 2)
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Flow
  Routine initialize
  Routine game_instr
  Routine boring_instr
  Routine hand_practice
  Routine get_ready
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine balloons
  LoopTerminator trials
  Routine thanks
