PsychoPy2experiment version="1.84.1"
Settings
  Data filename = '/Users/ecohodes/Dropbox/sc/sc_output/NoiseRating/logs/%s_%s' % (expName, expInfo['date'])
  Monitor = testMonitor
  Enable Escape = False
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'participantID': u''}
  expName = noise
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        # Project directory (change this and the log directory declared
        # "Experiment Settings" if moving to a new environment)
        projectDir = '/Users/ecohodes/Dropbox/sc/'

        # path of folder containing the sounds
        media = projectDir + 'sc_media/'
        outputDir = projectDir + 'sc_output/NoiseRating/'

        # A and B are Psychopy placeholders for the netural sounds
        soundsToRate = [media + 'chime.wav', media + 'Balloon_Pop.wav', media + 'SHAPES_USE.wav', media + 'egg_crack.wav']

        # slides that are cycled through for each sound to be rated
        instructionSlide = media + 'Noise_Rating_Slides/InstructionSlide.jpg'
        ratingSlide = media + 'Noise_Rating_Slides/RatingSlide.jpg'
        fixationSlide = media + 'iti_background.jpg'

        # start off with the instruction slide and the first sound
        currentSlide = instructionSlide
        playSoundNow = False

        # valid participant ID
        import re
        pattern = '^[A-Za-z0-9][A-Za-z0-9_\-]*$'
        if not re.search(pattern, expInfo['participantID']):
            print "Error: Invalid or missing participant ID."
            print "The participant ID must start with a letter or number, and it can only contain numbers, letters, hyphens, and underscores."
            core.quit()

        outputFile = outputDir + "noise_ratings_%s.txt" % expInfo['participantID']
        f = open(outputFile, 'w')
        f.write("Participant\tNoise\tRating\n")
      Begin Routine:
        currentSound = soundsToRate.pop(0)
      End Experiment:
        print "Finished run!"
      Each Frame:
        if currentSlide == instructionSlide and event.getKeys('space'):
            currentSlide = fixationSlide


        elif currentSlide == fixationSlide:
            # if the sound hasn't been played, wait a short period and then play it
            if soundToRate.status != FINISHED:
                core.wait(0.5)
                playSoundNow = True
            # if the sound is finished playing, go to the next slide
            else:
                currentSlide = ratingSlide
                playSoundNow = False

        elif currentSlide == ratingSlide:
            keys = event.getKeys()
            try:
                rating = int(keys[0])
            except:
                pass
            else:
                f.write("%s\t%s\t%d\n" %(expInfo['participantID'], currentSound, rating))
                currentSlide = instructionSlide
                continueRoutine = False
    KeyboardComponent key_listener
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    ImageComponent Slide
      startVal [time (s)] = 0
      image [set every frame] = $currentSlide
      size = (2, 2)
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    SoundComponent soundToRate
      sound [set every repeat] = $currentSound
      stopVal [duration (s)] = 1
      startVal [condition] = playSoundNow
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Flow
  LoopInitiator sounds loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator sounds
